WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindIsoForceDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindIsoForceDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindIsoForceDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindIsoForceDataSchema.Rig.AindIsoForceRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindIsoForceDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.AindIsoForceTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    GroupWorkflow HarpDevices
        SubscribeSubject HarpWhiteRabbitEvents
        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> AllenNeuralDynamics.WhiteRabbit.Parse(Register=AllenNeuralDynamics.WhiteRabbit.TimestampedCounter)
        -> MemberSelector(Selector=Seconds)
        -> BehaviorSubject HarpTimestampSource

        SubscribeSubject StartExperiment
        -> Unit
        -> PublishSubject TriggerHarpReadDump

        IncludeWorkflow(Path=Extensions\HarpLoadCellsDevice.bonsai)
        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindIsoForceDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #23
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #27
        #23, #27 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump) => #32
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpEnvironmentSensor)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #35
        #32, #35 -> SubscribeWhen

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                  Gamma(Selector=Gamma)
                  PixelFormat(Selector=PixelFormat)
                  AdcBitDepth(Selector=AdcBitDepth)
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=RegionOfInterest)
                -> InputMapping(Value(Selector="X,Y,Width,Height"))
                -> PropertySource<Bonsai.Vision.Crop,OpenCV.Net.Rect>(MemberName=RegionOfInterest, Value(X=0, Y=0, Width=0, Height=0))
                -> PropertyMapping(RegionOfInterest) => #14
                #5, #8, #14 -> AllenNeuralDynamics.Core.AindSpinnakerCapture => #15
                  Index=nil
                  ColorProcessing=Default
                  ExposureTime=19000
                  Gain=0
                  Binning=1
                  Gamma=nil
                  PixelFormat=Mono8
                  RegionOfInterest(X=0, Y=0, Width=0, Height=0)
                  AdcBitDepth=nil
                SubscribeSubject FrameEvent => #16
                #15, #16 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #18
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #20
                #18, #20 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject SubjectSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> Take(Count=1) => #10
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #13
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #16
    #10, #13, #16 -> Merge
    -> BehaviorSubject ExperimentState

    SubscribeSubject TrialNumber
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialNumber)
    -> MulticastSubject SoftwareEvents

GroupWorkflow HardwareChecks
    IncludeWorkflow(Path=Extensions\ProtocolValidation.bonsai) => #0
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

GroupWorkflow OperationControl
    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsNaN
          Expression: !double.IsNaN(it)
        -> Condition GreaterThan0 => #8
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #11
        #8, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #13
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #14
        #13, #14 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsNaN => #25
          Expression: !double.IsNaN(it)
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvents

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> DistinctUntilChanged
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #1
        SubscribeSubject TriggeredCamerasReady => #2
        #1, #2 -> Zip
        -> Take(Count=1)
        -> Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #13
        #10, #13 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow LoadCells
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true))
        -> PublishSubject RawLoadCellData => #3
        SubscribeSubject LoadCellsCalibration
        -> PropertyMapping(Calibration) => #5
        #3, #5 -> ApplyLoadCellsCalibration
        -> PublishSubject CalibratedLoadCellData

        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=Force)
        -> Take(Count=1)
        -> AsyncSubject ForceOperationControl

        SubscribeSubject ForceOperationControl
        -> CreateObservable ParseForce
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject CalibratedLoadCellData => #3
            SubscribeSubject settings
            -> PropertyMapping(ForceOperationControl) => #5
            #3, #5 -> ParseForce(ForceOperationControl="")
            -> WorkflowOutput
        -> Switch
        -> PublishSubject CurrentForce

Defer TaskLogic => #9
    SubscribeSubject TaskLogicParameters
    -> SelectMany PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation => #6
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #9
        #6, #9 -> Merge
        -> ToList
        -> WorkflowOutput
    -> Take(Count=1)
    -> BehaviorSubject BlockStatistics

    SubscribeSubject BlockStatistics
    -> Merge
    -> CreateObservable CreateBlock
        WorkflowInput Source1
        -> Take(Count=1)
        -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ActiveBlock)
        -> BehaviorSubject ActiveBlock

        IntProperty(Value=0)
        -> Take(Count=1)
        -> BehaviorSubject TrialNumberInBlock

        SubscribeSubject ActiveBlock => #7
        -> AindIsoForceDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.BlockGenerator>)
        -> SelectMany BlockGenerator => #9
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject _ThisBlock

            SubscribeSubject _ThisBlock
            -> MemberSelector(Selector=TrialTemplate)
            -> Take(Count=1) => #5
            SubscribeSubject _ThisBlock
            -> MemberSelector(Selector=BlockSize)
            -> IncludeWorkflow(Path=Extensions\SampleDistributionWithRngSeed.bonsai)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
              Expression: Convert.ToInt32(it)
            -> Bonsai.Scripting.Expressions.ExpressionTransform ClampTo0
              Expression: it > 0? it : 0
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ActiveBlockLength)
            -> PropertyMapping(Count) => #12
            #5, #12 -> RepeatCount(Count=0)
            -> ToList
            -> WorkflowOutput
        #7 -> AindIsoForceDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindIsoForceDataSchema.TaskLogic.Block>)
        -> SelectMany Block => #11
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject _ThisBlock

            SubscribeSubject _ThisBlock
            -> SelectMany Shuffle
                WorkflowInput Source1 => #0
                -> Condition Shuffle
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Shuffle)
                    -> WorkflowOutput
                -> MemberSelector(Selector=Trials)
                -> Merge => #3
                SubscribeSubject RngSeed => #4
                #3, #4 -> Bonsai.Numerics.Permutation => #5
                #0 -> Condition DontShuffle
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Shuffle)
                    -> BitwiseNot
                    -> WorkflowOutput
                -> MemberSelector(Selector=Trials)
                -> Merge => #8
                #5, #8 -> Merge
                -> ToList
                -> WorkflowOutput
            -> BehaviorSubject _TrialList => #5
            -> MemberSelector(Selector=Count)
            -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName=ActiveBlockLength) => #7
            #7, #5 -> Zip
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        #9, #11 -> Merge
        -> BehaviorSubject BlockTrialList

        SubscribeSubject BlockTrialList
        -> Merge
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> WorkflowOutput
    -> Concat
    -> LastOrDefault
    -> Unit
    -> MulticastSubject EndExperiment
    -> WorkflowOutput
SubscribeSubject EndExperiment => #10
#9, #10 -> TakeUntil => #11
SubscribeSubject StartExperiment => #12
#11, #12 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #14
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #16
#14, #16 -> TakeUntil => #17
SubscribeSubject StartLogging => #18
#17, #18 -> SubscribeWhen

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    IncludeWorkflow(Path=Extensions\LauncherControl.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
    IncludeWorkflow(Path=Extensions\ValveGui.bonsai, Interval=PT0.5S, OpeningTimeMs=100, Repeats=200)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
    GroupWorkflow HwShortcuts
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=3, RowCount=3, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #5
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #8
        #5, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    IntProperty(Value=0)
    -> Visualizer LoadCellControl
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #1
        SubscribeSubject CalibratingLoadCells
        -> Bonsai.Scripting.Expressions.ExpressionTransform Prompt
          Expression: it ? "Calibrating..." : "Calibrate Load Cells"
        -> PropertyMapping(Text) => #4
        #1, #4 -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text=TriggerLoadCellCalibration)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject CalibrateLoadCells
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>)
        -> Bonsai.Gui.TableLayoutPanelBuilder LoadCellCalibration(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #9
        SubscribeSubject HarpLoadCellsEvents
        -> Harp.LoadCells.Parse(Register=Harp.LoadCells.TimestampedLoadCellData)
        -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
          IndexSelector=Seconds
          ValueSelector="Value.Channel0,Value.Channel1,Value.Channel2,Value.Channel3,Value.Channel4,Value.Channel5,Value.Channel6,Value.Channel7"
          SymbolType=None
          LineWidth=1
          CurveSettings=""
          Capacity=5000
          Min=nil
          Max=nil
        -> VisualizerMapping => #13
        #9, #13 -> Bonsai.Gui.TableLayoutPanelBuilder Calibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=1
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.1), ColumnStyle(SizeType=Percent, Width=0.9))
          RowStyles=""
          CellSpans=""
        -> VisualizerMapping
        -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #14
    #5, #7, #9, #11, #14 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> Bonsai.Design.VisualizerWindow(Text=ControlUI, Visible=true, Location=nil, Size=nil, WindowState=nil)
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

GroupWorkflow Visualizers
    IntProperty(Value=0)
    -> Visualizer VideoControllerVisualization
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it != null ? (it.Cameras.Count > 0) : false
        -> AsyncSubject TriggeredCamerasControllerExists

        SubscribeSubject RigSchema => #4
        SubscribeSubject TriggeredCamerasControllerExists
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MemberSelector(Selector=TriggeredCameraController.Cameras.Keys)
        -> Bonsai.Dsp.ConvertToArray(Depth=nil)
        -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
        -> BehaviorSubject SelectedControllerCamera
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ListBoxDataSourceVisualizer>) => #12
        SubscribeSubject SelectedControllerCamera
        -> CreateObservable GetStream
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Camera

            SubscribeSubject TriggeredCamerasStream => #3
            SubscribeSubject Camera
            -> PropertyMapping(Value) => #5
            #3, #5 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty)
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Switch
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #17
        SubscribeSubject TriggeredCamerasControllerExists
        -> PropertyMapping(Enabled, Visible) => #19
        #12, #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder VideoVisualizer
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.6), RowStyle(SizeType=Percent, Height=0.3))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #2
    SubscribeSubject LickEvent => #3
    -> IntProperty(Value=1) => #4
    #4, #3 -> Zip
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Item2
      ValueSelector=Item1
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=Licks, Color=Blue))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>)
    -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder Lickometer(ReverseX=false, ReverseY=false, Span=20, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=0, Max=2)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #9
    SubscribeSubject CurrentForce
    -> Bonsai.Gui.ZedGraph.LineGraphBuilder
      ValueSelector="Value.RightLeft,Value.PushPull"
      SymbolType=None
      LineWidth=2
      CurveSettings(CurveConfiguration(Label=Force, Color=Maroon))
      Capacity=1000
      XMin=nil
      XMax=nil
      YMin=nil
      YMax=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.LineGraphVisualizer>) => #12
    SubscribeSubject CurrentForce
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector="Value.RightLeft,Value.PushPull", SymbolType=None, LineWidth=3, CurveSettings="", Capacity=1000, Min=nil, Max=nil)
    -> VisualizerMapping => #15
    #2, #9, #12, #15 -> Bonsai.Gui.TableLayoutPanelBuilder Monitoring
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=2
      ColumnStyles=""
      RowStyles(RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.4), RowStyle(SizeType=Percent, Height=0.2))
      CellSpans=""
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #17
    SubscribeSubject SoftwareEvents
    -> VisualizerMapping
    -> Bonsai.Gui.TableLayoutPanelBuilder SoftwareEvents(Enabled=true, Visible=true, ColumnCount=1, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #21
    #17, #21 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
    -> Bonsai.Design.VisualizerWindow(Text=Visualizer, Visible=true, Location=nil, Size=nil, WindowState=nil)
    -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TriggeredCamerasReady => #1
    #0, #1 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #5
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #6
    #5, #6 -> Delay(DueTime=PT3S)
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    WorkflowInput Source1
    -> WorkflowOutput
-> Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
